WorkflowBuilder(Version=2.7.1)
Bonsai.Vision.FileCapture
  FileName="C:\Users\Andre Maia Chagas\Desktop\22.03.02 (FS)\1242022-03-02T12_52_43.avi"
  PlaybackRate=10240
  StartPosition=0
  PositionUnits=Frames
  Loop=false
  Playing=true
-> Bonsai.Vision.Grayscale => #1
-> SelectMany "Top Left" => #2
    WorkflowInput Source1 => #0
    Source2=#0 -> GroupWorkflow index1 => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index2 => #2
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index3 => #3
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index4 => #4
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index5 => #5
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index6 => #6
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #1, #2, #3, #4, #5, #6 -> Zip
    -> WorkflowOutput
#1 -> SelectMany "Top Right" => #3
    WorkflowInput Source1 => #0
    Source2=#0 -> GroupWorkflow index1 => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index2 => #2
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index3 => #3
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index4 => #4
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index5 => #5
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index6 => #6
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #1, #2, #3, #4, #5, #6 -> Zip
    -> WorkflowOutput
#1 -> SelectMany "Bottom Left" => #4
    WorkflowInput Source1 => #0
    Source2=#0 -> GroupWorkflow index1 => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index2 => #2
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index3 => #3
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index4 => #4
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index5 => #5
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index6 => #6
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #1, #2, #3, #4, #5, #6 -> Zip
    -> WorkflowOutput
#1 -> SelectMany "Bottom Right" => #5
    WorkflowInput Source1 => #0
    Source2=#0 -> GroupWorkflow index1 => #1
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index2 => #2
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index3 => #3
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index4 => #4
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index5 => #5
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #0 -> GroupWorkflow index6 => #6
        WorkflowInput Source1
        -> Bonsai.Vision.Crop(RegionOfInterest(X=143, Y=132, Width=53, Height=92)) => #1
        -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #5
        #1 -> Bonsai.Vision.Threshold(ThresholdValue=128, MaxValue=255, ThresholdType=Binary)
        -> Bonsai.Vision.FindContours(Mode=External, Method=ChainApproxNone, Offset(X=0, Y=0), MinArea=200, MaxArea=nil)
        -> Bonsai.Vision.BinaryRegionAnalysis
        -> Index(Operand=IntProperty(Value=0)) => #9
        #5, #9 -> Catch => #10
        -> MemberSelector(Selector=Contour.Rect)
        -> PropertyMapping(RegionOfInterest) => #12
        #10 -> MemberSelector(Selector=Area) => #13
        #12, #1 -> Bonsai.Vision.Crop(RegionOfInterest(X=3, Y=1, Width=13, Height=29)) => #14
        -> Bonsai.Dsp.Average
        -> MemberSelector(Selector=Val0) => #16
        #14 -> MemberSelector(Selector=Height) => #17
        #14 -> MemberSelector(Selector=Width) => #18
        #18, #17, #16, #13 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as width,
            Item2 as height,
            Item3 as avgBright,
            item4 as area

            )
        -> WorkflowOutput
    #1, #2, #3, #4, #5, #6 -> Zip
    -> WorkflowOutput
#2, #3, #4, #5 -> Zip
-> Bonsai.Scripting.Expressions.ExpressionTransform
  Expression:
    new(
    Item1 as TopLeft,
    Item2 as TopRight,
    Item3 as BottomLeft,
    item4 as BottomRight

    )
-> Bonsai.IO.CsvWriter
  FileName="C:\Users\Andre Maia Chagas\Documents\GitHub\sussex\embryo-monitoring\data\output.csv"
  Append=false
  Overwrite=false
  Suffix=Timestamp
  IncludeHeader=true
